PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data_Arrows_2' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[1,1,1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'participant': u'', u'F or J': u'', u'Scr or Whi': u''}
  expName = Arrows_F_Correct_jitter
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine Last_Instruction_Reminder
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        'OK - That was the end of the practice. \n\n'

        'Do you have any questions? \n\n'

        'Remember, press ' + $key + ' for same as previous, '+ $other_key + ' for different from previous!\n\n'

        '[Press space to begin and ' + $key + ' for this next slide]'
  Routine trial
    ImageComponent image
      pos [set every repeat] = [random.randint(-450,450)/1000,random.randint(-450,450)/1000]
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $"21_stimuli\\"+Stimulus
      size = [1600/win.size[0],1600/win.size[1]]
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    KeyboardComponent key_resp_2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'f','j'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Begin Experiment:
        import random
      End Routine:
        trials.addData('location', image.pos)
  Routine practice
    ImageComponent image_3
      pos [set every repeat] = [random.randint(-450,450)/1000,random.randint(-450,450)/1000]
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [1600/win.size[0],1600/win.size[1]]
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'f','j'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        import random
  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instructions
    ImageComponent image_2
      startVal [time (s)] = 0.0
      image [set every repeat] = $"instructions//" + Order
      size = [2, 2]
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'j'
      startVal [time (s)] = 0.0
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    CodeComponent Beg_Exp_Code
      Begin Experiment:
        if expInfo['F or J'] == 'F':
            instructions = 'Instructions_F.xlsx'
            key = 'F'
            other_key = 'J'
        elif expInfo['F or J'] == 'J':
            instructions = 'Instructions_J.xlsx'
            key = 'J'
            other_key = 'F'
        if expInfo['Scr or Whi'] == 'Scr':
            practice_images = "practice_order_SCR.xlsx"
            background = 'SCR'
        elif expInfo['Scr or Whi'] == 'Whi':
            practice_images = "practice_order_WHI.xlsx"
            background = 'WHI'
        stimOrder = expInfo['participant'] + '.xlsx'
Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = $"instructions\\"+ instructions
    loopType = sequential
    nReps = 1
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    Routine Instructions
  LoopTerminator instructions
  LoopInitiator practice_2 loopType="TrialHandler"
    conditionsFile = $"Extra_Stimuli//"+ practice_images
    loopType = random
    nReps = 1
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    Routine practice
  LoopTerminator practice_2
  Routine Last_Instruction_Reminder
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ stimOrder
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
